# Generated by Configurator on Wed Jun 24 16:37:29 EDT 2020

# Reset
Property,Core,Initialize,0

# Devices
Device,DigitalIO,NI100X,DigitalIO
Device,FW_Empty_S1,NI100X,AnalogIO
Device,FW_FITC_S2,NI100X,AnalogIO
Device,FW_TRITC_S3,NI100X,AnalogIO
Device,FW_CFP_S4,NI100X,AnalogIO
Device,FW_YFPHQ_S5,NI100X,AnalogIO
Device,FW_TxRed_S6,NI100X,AnalogIO
Device,CoolLED,NI100X,AnalogIO
Device,SpectraIII_395nm,NI100X,AnalogIO
Device,SpectraIII_438nm,NI100X,AnalogIO
Device,SpectraIII_475nm,NI100X,AnalogIO
Device,SpectraIII_511nm,NI100X,AnalogIO
Device,SpectraIII_555nm,NI100X,AnalogIO
Device,SpectraIII_575nm,NI100X,AnalogIO
Device,SpectraIII_635nm,NI100X,AnalogIO
Device,SpectraIII_748nm,NI100X,AnalogIO
Device,Ti2,NikonTi2,Ti2-E__0
Device,ZDrive,NikonTi2,ZDrive
Device,XYStage,NikonTi2,XYStage
Device,Nosepiece,NikonTi2,Nosepiece
Device,FilterTurret1,NikonTi2,FilterTurret1
Device,Turret1Shutter,NikonTi2,Turret1Shutter
Device,LightPath,NikonTi2,LightPath
Device,PFS,NikonTi2,PFS
Device,PFSOffset,NikonTi2,PFSOffset
Device,IntermediateMagnification,NikonTi2,IntermediateMagnification
Device,SpectraIII,Lumencor,LightEngine
Device,Iris 9,PVCAM,Camera-1

# Pre-init settings for devices
Property,DigitalIO,AutoDetectedOutputPort,PXI1Slot6/port0
Property,DigitalIO,IOChannel,PXI1Slot6/port0
Property,DigitalIO,TriggerSequenceLength,1000
Property,FW_Empty_S1,AutoDetectedOutputPort,PXI1Slot6/ao25
Property,FW_Empty_S1,Demo,No
Property,FW_Empty_S1,IOChannel,PXI1Slot6/ao25
Property,FW_Empty_S1,MaxVolts,5.0000
Property,FW_Empty_S1,MinVolts,0.0000
Property,FW_Empty_S1,TriggerSequenceLength,1000
Property,FW_FITC_S2,AutoDetectedOutputPort,PXI1Slot6/ao24
Property,FW_FITC_S2,Demo,No
Property,FW_FITC_S2,IOChannel,PXI1Slot6/ao24
Property,FW_FITC_S2,MaxVolts,5.0000
Property,FW_FITC_S2,MinVolts,0.0000
Property,FW_FITC_S2,TriggerSequenceLength,1000
Property,FW_TRITC_S3,AutoDetectedOutputPort,PXI1Slot6/ao22
Property,FW_TRITC_S3,Demo,No
Property,FW_TRITC_S3,IOChannel,PXI1Slot6/ao22
Property,FW_TRITC_S3,MaxVolts,5.0000
Property,FW_TRITC_S3,MinVolts,0.0000
Property,FW_TRITC_S3,TriggerSequenceLength,1000
Property,FW_CFP_S4,AutoDetectedOutputPort,PXI1Slot6/ao12
Property,FW_CFP_S4,Demo,No
Property,FW_CFP_S4,IOChannel,PXI1Slot6/ao12
Property,FW_CFP_S4,MaxVolts,5.0000
Property,FW_CFP_S4,MinVolts,0.0000
Property,FW_CFP_S4,TriggerSequenceLength,1000
Property,FW_YFPHQ_S5,AutoDetectedOutputPort,PXI1Slot6/ao26
Property,FW_YFPHQ_S5,Demo,No
Property,FW_YFPHQ_S5,IOChannel,PXI1Slot6/ao26
Property,FW_YFPHQ_S5,MaxVolts,5.0000
Property,FW_YFPHQ_S5,MinVolts,0.0000
Property,FW_YFPHQ_S5,TriggerSequenceLength,1000
Property,FW_TxRed_S6,AutoDetectedOutputPort,PXI1Slot6/ao23
Property,FW_TxRed_S6,Demo,No
Property,FW_TxRed_S6,IOChannel,PXI1Slot6/ao23
Property,FW_TxRed_S6,MaxVolts,5.0000
Property,FW_TxRed_S6,MinVolts,0.0000
Property,FW_TxRed_S6,TriggerSequenceLength,1000
Property,CoolLED,AutoDetectedOutputPort,PXI1Slot6/ao8
Property,CoolLED,Demo,No
Property,CoolLED,IOChannel,PXI1Slot6/ao8
Property,CoolLED,MaxVolts,5.0000
Property,CoolLED,MinVolts,0.0000
Property,CoolLED,TriggerSequenceLength,1000
Property,SpectraIII_395nm,AutoDetectedOutputPort,PXI1Slot6/ao0
Property,SpectraIII_395nm,Demo,No
Property,SpectraIII_395nm,IOChannel,PXI1Slot6/ao0
Property,SpectraIII_395nm,MaxVolts,5.0000
Property,SpectraIII_395nm,MinVolts,0.0000
Property,SpectraIII_395nm,TriggerSequenceLength,1000
Property,SpectraIII_438nm,AutoDetectedOutputPort,PXI1Slot6/ao1
Property,SpectraIII_438nm,Demo,No
Property,SpectraIII_438nm,IOChannel,PXI1Slot6/ao1
Property,SpectraIII_438nm,MaxVolts,5.0000
Property,SpectraIII_438nm,MinVolts,0.0000
Property,SpectraIII_438nm,TriggerSequenceLength,1000
Property,SpectraIII_475nm,AutoDetectedOutputPort,PXI1Slot6/ao2
Property,SpectraIII_475nm,Demo,No
Property,SpectraIII_475nm,IOChannel,PXI1Slot6/ao2
Property,SpectraIII_475nm,MaxVolts,5.0000
Property,SpectraIII_475nm,MinVolts,0.0000
Property,SpectraIII_475nm,TriggerSequenceLength,1000
Property,SpectraIII_511nm,AutoDetectedOutputPort,PXI1Slot6/ao3
Property,SpectraIII_511nm,Demo,No
Property,SpectraIII_511nm,IOChannel,PXI1Slot6/ao3
Property,SpectraIII_511nm,MaxVolts,5.0000
Property,SpectraIII_511nm,MinVolts,0.0000
Property,SpectraIII_511nm,TriggerSequenceLength,1000
Property,SpectraIII_555nm,AutoDetectedOutputPort,PXI1Slot6/ao4
Property,SpectraIII_555nm,Demo,No
Property,SpectraIII_555nm,IOChannel,PXI1Slot6/ao4
Property,SpectraIII_555nm,MaxVolts,5.0000
Property,SpectraIII_555nm,MinVolts,0.0000
Property,SpectraIII_555nm,TriggerSequenceLength,1000
Property,SpectraIII_575nm,AutoDetectedOutputPort,PXI1Slot6/ao5
Property,SpectraIII_575nm,Demo,No
Property,SpectraIII_575nm,IOChannel,PXI1Slot6/ao5
Property,SpectraIII_575nm,MaxVolts,5.0000
Property,SpectraIII_575nm,MinVolts,0.0000
Property,SpectraIII_575nm,TriggerSequenceLength,1000
Property,SpectraIII_635nm,AutoDetectedOutputPort,PXI1Slot6/ao6
Property,SpectraIII_635nm,Demo,No
Property,SpectraIII_635nm,IOChannel,PXI1Slot6/ao6
Property,SpectraIII_635nm,MaxVolts,5.0000
Property,SpectraIII_635nm,MinVolts,0.0000
Property,SpectraIII_635nm,TriggerSequenceLength,1000
Property,SpectraIII_748nm,AutoDetectedOutputPort,PXI1Slot6/ao7
Property,SpectraIII_748nm,Demo,No
Property,SpectraIII_748nm,IOChannel,PXI1Slot6/ao7
Property,SpectraIII_748nm,MaxVolts,5.0000
Property,SpectraIII_748nm,MinVolts,0.0000
Property,SpectraIII_748nm,TriggerSequenceLength,1000
Property,SpectraIII,Connection,192.168.201.200
Property,SpectraIII,Model,GEN3

# Pre-init settings for COM ports

# Hub (parent) references
Parent,ZDrive,Ti2
Parent,XYStage,Ti2
Parent,Nosepiece,Ti2
Parent,FilterTurret1,Ti2
Parent,Turret1Shutter,Ti2
Parent,LightPath,Ti2
Parent,PFS,Ti2
Parent,PFSOffset,Ti2
Parent,IntermediateMagnification,Ti2

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,ZDrive,1
FocusDirection,PFSOffset,1

# Roles
Property,Core,Camera,Iris 9
Property,Core,Shutter,SpectraIII
Property,Core,Focus,ZDrive
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels
# DigitalIO
Label,DigitalIO,255,255
Label,DigitalIO,254,254
Label,DigitalIO,253,253
Label,DigitalIO,252,252
Label,DigitalIO,251,251
Label,DigitalIO,250,250
Label,DigitalIO,249,249
Label,DigitalIO,248,248
Label,DigitalIO,247,247
Label,DigitalIO,246,246
Label,DigitalIO,245,245
Label,DigitalIO,244,244
Label,DigitalIO,243,243
Label,DigitalIO,242,242
Label,DigitalIO,241,241
Label,DigitalIO,240,240
Label,DigitalIO,239,239
Label,DigitalIO,238,238
Label,DigitalIO,237,237
Label,DigitalIO,236,236
Label,DigitalIO,235,235
Label,DigitalIO,234,234
Label,DigitalIO,233,233
Label,DigitalIO,232,232
Label,DigitalIO,231,231
Label,DigitalIO,230,230
Label,DigitalIO,229,229
Label,DigitalIO,228,228
Label,DigitalIO,227,227
Label,DigitalIO,226,226
Label,DigitalIO,225,225
Label,DigitalIO,224,224
Label,DigitalIO,223,223
Label,DigitalIO,222,222
Label,DigitalIO,221,221
Label,DigitalIO,220,220
Label,DigitalIO,219,219
Label,DigitalIO,218,218
Label,DigitalIO,217,217
Label,DigitalIO,216,216
Label,DigitalIO,215,215
Label,DigitalIO,214,214
Label,DigitalIO,213,213
Label,DigitalIO,212,212
Label,DigitalIO,211,211
Label,DigitalIO,210,210
Label,DigitalIO,209,209
Label,DigitalIO,208,208
Label,DigitalIO,207,207
Label,DigitalIO,206,206
Label,DigitalIO,205,205
Label,DigitalIO,204,204
Label,DigitalIO,203,203
Label,DigitalIO,202,202
Label,DigitalIO,201,201
Label,DigitalIO,200,200
Label,DigitalIO,199,199
Label,DigitalIO,198,198
Label,DigitalIO,197,197
Label,DigitalIO,196,196
Label,DigitalIO,195,195
Label,DigitalIO,194,194
Label,DigitalIO,193,193
Label,DigitalIO,192,192
Label,DigitalIO,191,191
Label,DigitalIO,190,190
Label,DigitalIO,189,189
Label,DigitalIO,188,188
Label,DigitalIO,187,187
Label,DigitalIO,186,186
Label,DigitalIO,185,185
Label,DigitalIO,184,184
Label,DigitalIO,183,183
Label,DigitalIO,182,182
Label,DigitalIO,181,181
Label,DigitalIO,180,180
Label,DigitalIO,179,179
Label,DigitalIO,178,178
Label,DigitalIO,177,177
Label,DigitalIO,176,176
Label,DigitalIO,175,175
Label,DigitalIO,174,174
Label,DigitalIO,173,173
Label,DigitalIO,172,172
Label,DigitalIO,171,171
Label,DigitalIO,170,170
Label,DigitalIO,169,169
Label,DigitalIO,168,168
Label,DigitalIO,167,167
Label,DigitalIO,166,166
Label,DigitalIO,165,165
Label,DigitalIO,164,164
Label,DigitalIO,163,163
Label,DigitalIO,162,162
Label,DigitalIO,161,161
Label,DigitalIO,160,160
Label,DigitalIO,159,159
Label,DigitalIO,158,158
Label,DigitalIO,157,157
Label,DigitalIO,156,156
Label,DigitalIO,155,155
Label,DigitalIO,154,154
Label,DigitalIO,153,153
Label,DigitalIO,152,152
Label,DigitalIO,151,151
Label,DigitalIO,150,150
Label,DigitalIO,149,149
Label,DigitalIO,148,148
Label,DigitalIO,147,147
Label,DigitalIO,146,146
Label,DigitalIO,145,145
Label,DigitalIO,144,144
Label,DigitalIO,143,143
Label,DigitalIO,142,142
Label,DigitalIO,141,141
Label,DigitalIO,140,140
Label,DigitalIO,139,139
Label,DigitalIO,138,138
Label,DigitalIO,137,137
Label,DigitalIO,136,136
Label,DigitalIO,135,135
Label,DigitalIO,134,134
Label,DigitalIO,133,133
Label,DigitalIO,132,132
Label,DigitalIO,131,131
Label,DigitalIO,130,130
Label,DigitalIO,129,129
Label,DigitalIO,128,128
Label,DigitalIO,127,127
Label,DigitalIO,126,126
Label,DigitalIO,125,125
Label,DigitalIO,124,124
Label,DigitalIO,123,123
Label,DigitalIO,122,122
Label,DigitalIO,121,121
Label,DigitalIO,120,120
Label,DigitalIO,119,119
Label,DigitalIO,118,118
Label,DigitalIO,117,117
Label,DigitalIO,116,116
Label,DigitalIO,115,115
Label,DigitalIO,114,114
Label,DigitalIO,113,113
Label,DigitalIO,112,112
Label,DigitalIO,111,111
Label,DigitalIO,110,110
Label,DigitalIO,109,109
Label,DigitalIO,108,108
Label,DigitalIO,107,107
Label,DigitalIO,106,106
Label,DigitalIO,105,105
Label,DigitalIO,104,104
Label,DigitalIO,103,103
Label,DigitalIO,102,102
Label,DigitalIO,101,101
Label,DigitalIO,100,100
Label,DigitalIO,99,99
Label,DigitalIO,98,98
Label,DigitalIO,97,97
Label,DigitalIO,96,96
Label,DigitalIO,95,95
Label,DigitalIO,94,94
Label,DigitalIO,93,93
Label,DigitalIO,92,92
Label,DigitalIO,91,91
Label,DigitalIO,90,90
Label,DigitalIO,89,89
Label,DigitalIO,88,88
Label,DigitalIO,87,87
Label,DigitalIO,86,86
Label,DigitalIO,85,85
Label,DigitalIO,84,84
Label,DigitalIO,83,83
Label,DigitalIO,82,82
Label,DigitalIO,81,81
Label,DigitalIO,80,80
Label,DigitalIO,79,79
Label,DigitalIO,78,78
Label,DigitalIO,77,77
Label,DigitalIO,76,76
Label,DigitalIO,75,75
Label,DigitalIO,74,74
Label,DigitalIO,73,73
Label,DigitalIO,72,72
Label,DigitalIO,71,71
Label,DigitalIO,70,70
Label,DigitalIO,69,69
Label,DigitalIO,68,68
Label,DigitalIO,67,67
Label,DigitalIO,66,66
Label,DigitalIO,65,65
Label,DigitalIO,64,64
Label,DigitalIO,63,63
Label,DigitalIO,62,62
Label,DigitalIO,61,61
Label,DigitalIO,60,60
Label,DigitalIO,59,59
Label,DigitalIO,58,58
Label,DigitalIO,57,57
Label,DigitalIO,56,56
Label,DigitalIO,55,55
Label,DigitalIO,54,54
Label,DigitalIO,53,53
Label,DigitalIO,52,52
Label,DigitalIO,51,51
Label,DigitalIO,50,50
Label,DigitalIO,49,49
Label,DigitalIO,48,48
Label,DigitalIO,47,47
Label,DigitalIO,46,46
Label,DigitalIO,45,45
Label,DigitalIO,44,44
Label,DigitalIO,43,43
Label,DigitalIO,42,42
Label,DigitalIO,41,41
Label,DigitalIO,40,40
Label,DigitalIO,39,39
Label,DigitalIO,38,38
Label,DigitalIO,37,37
Label,DigitalIO,36,36
Label,DigitalIO,35,35
Label,DigitalIO,34,34
Label,DigitalIO,33,33
Label,DigitalIO,32,32
Label,DigitalIO,31,31
Label,DigitalIO,30,30
Label,DigitalIO,29,29
Label,DigitalIO,28,28
Label,DigitalIO,27,27
Label,DigitalIO,26,26
Label,DigitalIO,25,25
Label,DigitalIO,24,24
Label,DigitalIO,23,23
Label,DigitalIO,22,22
Label,DigitalIO,21,21
Label,DigitalIO,20,20
Label,DigitalIO,19,19
Label,DigitalIO,18,18
Label,DigitalIO,17,17
Label,DigitalIO,16,16
Label,DigitalIO,15,15
Label,DigitalIO,14,14
Label,DigitalIO,13,13
Label,DigitalIO,12,12
Label,DigitalIO,11,11
Label,DigitalIO,10,10
Label,DigitalIO,9,9
Label,DigitalIO,8,8
Label,DigitalIO,7,7
Label,DigitalIO,6,6
Label,DigitalIO,5,5
Label,DigitalIO,4,4
Label,DigitalIO,3,3
Label,DigitalIO,2,2
Label,DigitalIO,1,1
Label,DigitalIO,0,0
# Nosepiece
Label,Nosepiece,5,6-Plan Fluor 100x Oil
Label,Nosepiece,4,5-Plan Apo Lmbd 60x Oil
Label,Nosepiece,3,4-
Label,Nosepiece,2,3-Plan Apo Lmbd 40x
Label,Nosepiece,1,2-Plan Apo Lmbd 40x
Label,Nosepiece,0,1-Plan Apo Lmbd 20x
# FilterTurret1
Label,FilterTurret1,5,6-Penta
Label,FilterTurret1,4,5-Cy7
Label,FilterTurret1,3,4-Cy5
Label,FilterTurret1,2,3-DAPI
Label,FilterTurret1,1,2-QUAD-IR
Label,FilterTurret1,0,1-Quad
# LightPath
Label,LightPath,3,4-L100
Label,LightPath,2,3-AUX
Label,LightPath,1,2-R100
Label,LightPath,0,1-EYE

# Configuration presets
# Group: FISH_channels
# Preset: RFP
ConfigGroup,FISH_channels,RFP,FW_Empty_S1,Volts,0.0000
ConfigGroup,FISH_channels,RFP,FW_FITC_S2,Volts,0.0000
ConfigGroup,FISH_channels,RFP,FW_TRITC_S3,Volts,5.0000
ConfigGroup,FISH_channels,RFP,FW_CFP_S4,Volts,0.0000
ConfigGroup,FISH_channels,RFP,FW_YFPHQ_S5,Volts,0.0000
ConfigGroup,FISH_channels,RFP,FW_TxRed_S6,Volts,0.0000
ConfigGroup,FISH_channels,RFP,CoolLED,Volts,0.0000
ConfigGroup,FISH_channels,RFP,FilterTurret1,Label,6-Penta
ConfigGroup,FISH_channels,RFP,PFS,DichroicMirrorInserted,Yes
ConfigGroup,FISH_channels,RFP,SpectraIII,BLUE,0
ConfigGroup,FISH_channels,RFP,SpectraIII,BLUE_Intensity,0
ConfigGroup,FISH_channels,RFP,SpectraIII,CYAN,0
ConfigGroup,FISH_channels,RFP,SpectraIII,CYAN_Intensity,0
ConfigGroup,FISH_channels,RFP,SpectraIII,GREEN,1
ConfigGroup,FISH_channels,RFP,SpectraIII,GREEN_Intensity,1000
ConfigGroup,FISH_channels,RFP,SpectraIII,NIR,0
ConfigGroup,FISH_channels,RFP,SpectraIII,NIR_Intensity,0
ConfigGroup,FISH_channels,RFP,SpectraIII,RED,0
ConfigGroup,FISH_channels,RFP,SpectraIII,RED_Intensity,0
ConfigGroup,FISH_channels,RFP,SpectraIII,TEAL,0
ConfigGroup,FISH_channels,RFP,SpectraIII,TEAL_Intensity,0
ConfigGroup,FISH_channels,RFP,SpectraIII,VIOLET,0
ConfigGroup,FISH_channels,RFP,SpectraIII,VIOLET_Intensity,0
ConfigGroup,FISH_channels,RFP,SpectraIII,YELLOW,0
ConfigGroup,FISH_channels,RFP,SpectraIII,YELLOW_Intensity,0
ConfigGroup,FISH_channels,RFP,Iris 9,Exposure,500.0000

# Preset: GFP
ConfigGroup,FISH_channels,GFP,FW_Empty_S1,Volts,0.0000
ConfigGroup,FISH_channels,GFP,FW_FITC_S2,Volts,5.0000
ConfigGroup,FISH_channels,GFP,FW_TRITC_S3,Volts,0.0000
ConfigGroup,FISH_channels,GFP,FW_CFP_S4,Volts,0.0000
ConfigGroup,FISH_channels,GFP,FW_YFPHQ_S5,Volts,0.0000
ConfigGroup,FISH_channels,GFP,FW_TxRed_S6,Volts,0.0000
ConfigGroup,FISH_channels,GFP,CoolLED,Volts,0.0000
ConfigGroup,FISH_channels,GFP,FilterTurret1,Label,6-Penta
ConfigGroup,FISH_channels,GFP,PFS,DichroicMirrorInserted,Yes
ConfigGroup,FISH_channels,GFP,SpectraIII,BLUE,0
ConfigGroup,FISH_channels,GFP,SpectraIII,BLUE_Intensity,0
ConfigGroup,FISH_channels,GFP,SpectraIII,CYAN,1
ConfigGroup,FISH_channels,GFP,SpectraIII,CYAN_Intensity,1000
ConfigGroup,FISH_channels,GFP,SpectraIII,GREEN,0
ConfigGroup,FISH_channels,GFP,SpectraIII,GREEN_Intensity,0
ConfigGroup,FISH_channels,GFP,SpectraIII,NIR,0
ConfigGroup,FISH_channels,GFP,SpectraIII,NIR_Intensity,0
ConfigGroup,FISH_channels,GFP,SpectraIII,RED,0
ConfigGroup,FISH_channels,GFP,SpectraIII,RED_Intensity,0
ConfigGroup,FISH_channels,GFP,SpectraIII,TEAL,0
ConfigGroup,FISH_channels,GFP,SpectraIII,TEAL_Intensity,0
ConfigGroup,FISH_channels,GFP,SpectraIII,VIOLET,0
ConfigGroup,FISH_channels,GFP,SpectraIII,VIOLET_Intensity,0
ConfigGroup,FISH_channels,GFP,SpectraIII,YELLOW,0
ConfigGroup,FISH_channels,GFP,SpectraIII,YELLOW_Intensity,0
ConfigGroup,FISH_channels,GFP,Iris 9,Exposure,500.0000

# Preset: Cy7-noPFS
ConfigGroup,FISH_channels,Cy7-noPFS,FW_Empty_S1,Volts,5.0000
ConfigGroup,FISH_channels,Cy7-noPFS,FW_FITC_S2,Volts,0.0000
ConfigGroup,FISH_channels,Cy7-noPFS,FW_TRITC_S3,Volts,0.0000
ConfigGroup,FISH_channels,Cy7-noPFS,FW_CFP_S4,Volts,0.0000
ConfigGroup,FISH_channels,Cy7-noPFS,FW_YFPHQ_S5,Volts,0.0000
ConfigGroup,FISH_channels,Cy7-noPFS,FW_TxRed_S6,Volts,0.0000
ConfigGroup,FISH_channels,Cy7-noPFS,CoolLED,Volts,0.0000
ConfigGroup,FISH_channels,Cy7-noPFS,FilterTurret1,Label,6-Penta
ConfigGroup,FISH_channels,Cy7-noPFS,PFS,DichroicMirrorInserted,No
ConfigGroup,FISH_channels,Cy7-noPFS,SpectraIII,BLUE,0
ConfigGroup,FISH_channels,Cy7-noPFS,SpectraIII,BLUE_Intensity,0
ConfigGroup,FISH_channels,Cy7-noPFS,SpectraIII,CYAN,0
ConfigGroup,FISH_channels,Cy7-noPFS,SpectraIII,CYAN_Intensity,0
ConfigGroup,FISH_channels,Cy7-noPFS,SpectraIII,GREEN,0
ConfigGroup,FISH_channels,Cy7-noPFS,SpectraIII,GREEN_Intensity,0
ConfigGroup,FISH_channels,Cy7-noPFS,SpectraIII,NIR,1
ConfigGroup,FISH_channels,Cy7-noPFS,SpectraIII,NIR_Intensity,1000
ConfigGroup,FISH_channels,Cy7-noPFS,SpectraIII,RED,0
ConfigGroup,FISH_channels,Cy7-noPFS,SpectraIII,RED_Intensity,0
ConfigGroup,FISH_channels,Cy7-noPFS,SpectraIII,TEAL,0
ConfigGroup,FISH_channels,Cy7-noPFS,SpectraIII,TEAL_Intensity,0
ConfigGroup,FISH_channels,Cy7-noPFS,SpectraIII,VIOLET,0
ConfigGroup,FISH_channels,Cy7-noPFS,SpectraIII,VIOLET_Intensity,0
ConfigGroup,FISH_channels,Cy7-noPFS,SpectraIII,YELLOW,0
ConfigGroup,FISH_channels,Cy7-noPFS,SpectraIII,YELLOW_Intensity,0
ConfigGroup,FISH_channels,Cy7-noPFS,Iris 9,Exposure,500.0000

# Preset: Cy7
ConfigGroup,FISH_channels,Cy7,FW_Empty_S1,Volts,5.0000
ConfigGroup,FISH_channels,Cy7,FW_FITC_S2,Volts,0.0000
ConfigGroup,FISH_channels,Cy7,FW_TRITC_S3,Volts,0.0000
ConfigGroup,FISH_channels,Cy7,FW_CFP_S4,Volts,0.0000
ConfigGroup,FISH_channels,Cy7,FW_YFPHQ_S5,Volts,0.0000
ConfigGroup,FISH_channels,Cy7,FW_TxRed_S6,Volts,0.0000
ConfigGroup,FISH_channels,Cy7,CoolLED,Volts,0.0000
ConfigGroup,FISH_channels,Cy7,FilterTurret1,Label,6-Penta
ConfigGroup,FISH_channels,Cy7,PFS,DichroicMirrorInserted,Yes
ConfigGroup,FISH_channels,Cy7,SpectraIII,BLUE,0
ConfigGroup,FISH_channels,Cy7,SpectraIII,BLUE_Intensity,0
ConfigGroup,FISH_channels,Cy7,SpectraIII,CYAN,0
ConfigGroup,FISH_channels,Cy7,SpectraIII,CYAN_Intensity,0
ConfigGroup,FISH_channels,Cy7,SpectraIII,GREEN,0
ConfigGroup,FISH_channels,Cy7,SpectraIII,GREEN_Intensity,0
ConfigGroup,FISH_channels,Cy7,SpectraIII,NIR,1
ConfigGroup,FISH_channels,Cy7,SpectraIII,NIR_Intensity,1000
ConfigGroup,FISH_channels,Cy7,SpectraIII,RED,0
ConfigGroup,FISH_channels,Cy7,SpectraIII,RED_Intensity,0
ConfigGroup,FISH_channels,Cy7,SpectraIII,TEAL,0
ConfigGroup,FISH_channels,Cy7,SpectraIII,TEAL_Intensity,0
ConfigGroup,FISH_channels,Cy7,SpectraIII,VIOLET,0
ConfigGroup,FISH_channels,Cy7,SpectraIII,VIOLET_Intensity,0
ConfigGroup,FISH_channels,Cy7,SpectraIII,YELLOW,0
ConfigGroup,FISH_channels,Cy7,SpectraIII,YELLOW_Intensity,0
ConfigGroup,FISH_channels,Cy7,Iris 9,Exposure,1000.0000

# Preset: BF
ConfigGroup,FISH_channels,BF,FW_Empty_S1,Volts,0.0000
ConfigGroup,FISH_channels,BF,FW_FITC_S2,Volts,0.0000
ConfigGroup,FISH_channels,BF,FW_TRITC_S3,Volts,5.0000
ConfigGroup,FISH_channels,BF,FW_CFP_S4,Volts,0.0000
ConfigGroup,FISH_channels,BF,FW_YFPHQ_S5,Volts,0.0000
ConfigGroup,FISH_channels,BF,FW_TxRed_S6,Volts,0.0000
ConfigGroup,FISH_channels,BF,CoolLED,Volts,5.0000
ConfigGroup,FISH_channels,BF,FilterTurret1,Label,6-Penta
ConfigGroup,FISH_channels,BF,PFS,DichroicMirrorInserted,Yes
ConfigGroup,FISH_channels,BF,SpectraIII,BLUE,0
ConfigGroup,FISH_channels,BF,SpectraIII,BLUE_Intensity,0
ConfigGroup,FISH_channels,BF,SpectraIII,CYAN,0
ConfigGroup,FISH_channels,BF,SpectraIII,CYAN_Intensity,0
ConfigGroup,FISH_channels,BF,SpectraIII,GREEN,0
ConfigGroup,FISH_channels,BF,SpectraIII,GREEN_Intensity,0
ConfigGroup,FISH_channels,BF,SpectraIII,NIR,0
ConfigGroup,FISH_channels,BF,SpectraIII,NIR_Intensity,0
ConfigGroup,FISH_channels,BF,SpectraIII,RED,0
ConfigGroup,FISH_channels,BF,SpectraIII,RED_Intensity,0
ConfigGroup,FISH_channels,BF,SpectraIII,TEAL,0
ConfigGroup,FISH_channels,BF,SpectraIII,TEAL_Intensity,0
ConfigGroup,FISH_channels,BF,SpectraIII,VIOLET,0
ConfigGroup,FISH_channels,BF,SpectraIII,VIOLET_Intensity,0
ConfigGroup,FISH_channels,BF,SpectraIII,YELLOW,0
ConfigGroup,FISH_channels,BF,SpectraIII,YELLOW_Intensity,0
ConfigGroup,FISH_channels,BF,Iris 9,Exposure,60.0000

# Preset: Cy5
ConfigGroup,FISH_channels,Cy5,FW_Empty_S1,Volts,5.0000
ConfigGroup,FISH_channels,Cy5,FW_FITC_S2,Volts,0.0000
ConfigGroup,FISH_channels,Cy5,FW_TRITC_S3,Volts,0.0000
ConfigGroup,FISH_channels,Cy5,FW_CFP_S4,Volts,0.0000
ConfigGroup,FISH_channels,Cy5,FW_YFPHQ_S5,Volts,0.0000
ConfigGroup,FISH_channels,Cy5,FW_TxRed_S6,Volts,0.0000
ConfigGroup,FISH_channels,Cy5,CoolLED,Volts,0.0000
ConfigGroup,FISH_channels,Cy5,FilterTurret1,Label,6-Penta
ConfigGroup,FISH_channels,Cy5,PFS,DichroicMirrorInserted,Yes
ConfigGroup,FISH_channels,Cy5,SpectraIII,BLUE,0
ConfigGroup,FISH_channels,Cy5,SpectraIII,BLUE_Intensity,0
ConfigGroup,FISH_channels,Cy5,SpectraIII,CYAN,0
ConfigGroup,FISH_channels,Cy5,SpectraIII,CYAN_Intensity,0
ConfigGroup,FISH_channels,Cy5,SpectraIII,GREEN,0
ConfigGroup,FISH_channels,Cy5,SpectraIII,GREEN_Intensity,0
ConfigGroup,FISH_channels,Cy5,SpectraIII,NIR,0
ConfigGroup,FISH_channels,Cy5,SpectraIII,NIR_Intensity,0
ConfigGroup,FISH_channels,Cy5,SpectraIII,RED,1
ConfigGroup,FISH_channels,Cy5,SpectraIII,RED_Intensity,1000
ConfigGroup,FISH_channels,Cy5,SpectraIII,TEAL,0
ConfigGroup,FISH_channels,Cy5,SpectraIII,TEAL_Intensity,0
ConfigGroup,FISH_channels,Cy5,SpectraIII,VIOLET,0
ConfigGroup,FISH_channels,Cy5,SpectraIII,VIOLET_Intensity,0
ConfigGroup,FISH_channels,Cy5,SpectraIII,YELLOW,0
ConfigGroup,FISH_channels,Cy5,SpectraIII,YELLOW_Intensity,0
ConfigGroup,FISH_channels,Cy5,Iris 9,Exposure,500.0000



# PixelSize settings

