# Generated by Configurator on Thu May 11 16:04:14 EDT 2023

# 230613: replaced Iris15 with PVCamera (set to Iris 15 in slot 2), open Turret1Shutter on startup

# Reset
Property,Core,Initialize,0

# Devices
Device,COM4,SerialManager,COM4
Device,Ti2-E__0,NikonTi2,Ti2-E__0
Device,Nosepiece,NikonTi2,Nosepiece
Device,ZDrive,NikonTi2,ZDrive
Device,FilterTurret1,NikonTi2,FilterTurret1
Device,Turret1Shutter,NikonTi2,Turret1Shutter
Device,LightPath,NikonTi2,LightPath
Device,PFS,NikonTi2,PFS
Device,PFSOffset,NikonTi2,PFSOffset
Device,IntermediateMagnification,NikonTi2,IntermediateMagnification
Device,PVCamera,PVCAM,Camera-2
Device,Celesta,Lumencor,LightEngine
Device,XYStage,Prior,XYStage
Device,Cel_Violet408,NI100X,AnalogIO
Device,Cel_Blue445,NI100X,AnalogIO
Device,Cel_Cyan473,NI100X,AnalogIO
Device,Cel_Teal518,NI100X,AnalogIO
Device,Cel_Green545,NI100X,AnalogIO
Device,Cel_Red635,NI100X,AnalogIO
Device,Cel_NIR750,NI100X,AnalogIO
Device,TransShutter,NI100X,AnalogIO
Device,Camera,NI100X,DigitalIO
Device,Optospin Controller,Cairn_Optospin,Optospin Controller
Device,FW,Cairn_Optospin,Filter wheel 1

# Pre-init settings for devices
Property,Celesta,Connection,COM3
Property,Celesta,Model,GEN3
Property,XYStage,Port,COM4
Property,Cel_Violet408,AutoDetectedOutputPort,PXI1Slot6/ao0
Property,Cel_Violet408,Demo,No
Property,Cel_Violet408,IOChannel,PXI1Slot6/ao0
Property,Cel_Violet408,MaxVolts,5.0000
Property,Cel_Violet408,MinVolts,0.0000
Property,Cel_Violet408,TriggerSequenceLength,1000
Property,Cel_Blue445,AutoDetectedOutputPort,PXI1Slot6/ao1
Property,Cel_Blue445,Demo,No
Property,Cel_Blue445,IOChannel,PXI1Slot6/ao1
Property,Cel_Blue445,MaxVolts,5.0000
Property,Cel_Blue445,MinVolts,0.0000
Property,Cel_Blue445,TriggerSequenceLength,1000
Property,Cel_Cyan473,AutoDetectedOutputPort,PXI1Slot6/ao2
Property,Cel_Cyan473,Demo,No
Property,Cel_Cyan473,IOChannel,PXI1Slot6/ao2
Property,Cel_Cyan473,MaxVolts,5.0000
Property,Cel_Cyan473,MinVolts,0.0000
Property,Cel_Cyan473,TriggerSequenceLength,1000
Property,Cel_Teal518,AutoDetectedOutputPort,PXI1Slot6/ao3
Property,Cel_Teal518,Demo,No
Property,Cel_Teal518,IOChannel,PXI1Slot6/ao3
Property,Cel_Teal518,MaxVolts,5.0000
Property,Cel_Teal518,MinVolts,0.0000
Property,Cel_Teal518,TriggerSequenceLength,1000
Property,Cel_Green545,AutoDetectedOutputPort,PXI1Slot6/ao4
Property,Cel_Green545,Demo,No
Property,Cel_Green545,IOChannel,PXI1Slot6/ao4
Property,Cel_Green545,MaxVolts,5.0000
Property,Cel_Green545,MinVolts,0.0000
Property,Cel_Green545,TriggerSequenceLength,1000
Property,Cel_Red635,AutoDetectedOutputPort,PXI1Slot6/ao5
Property,Cel_Red635,Demo,No
Property,Cel_Red635,IOChannel,PXI1Slot6/ao5
Property,Cel_Red635,MaxVolts,5.0000
Property,Cel_Red635,MinVolts,0.0000
Property,Cel_Red635,TriggerSequenceLength,1000
Property,Cel_NIR750,AutoDetectedOutputPort,PXI1Slot6/ao6
Property,Cel_NIR750,Demo,No
Property,Cel_NIR750,IOChannel,PXI1Slot6/ao6
Property,Cel_NIR750,MaxVolts,5.0000
Property,Cel_NIR750,MinVolts,0.0000
Property,Cel_NIR750,TriggerSequenceLength,1000
Property,TransShutter,AutoDetectedOutputPort,PXI1Slot6/ao7
Property,TransShutter,Demo,No
Property,TransShutter,IOChannel,PXI1Slot6/ao7
Property,TransShutter,MaxVolts,5.0000
Property,TransShutter,MinVolts,0.0000
Property,TransShutter,TriggerSequenceLength,1000
Property,Camera,AutoDetectedOutputPort,PXI1Slot6/port0
Property,Camera,IOChannel,PXI1Slot6/port0
Property,Camera,TriggerSequenceLength,1000
Property,Optospin Controller,Optospin serial number,10761
Property,FW,Wheel Mode,Independent mode

# Pre-init settings for COM ports
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,38400
Property,COM4,DataBits,8
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Fast USB to Serial,Disable
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1

# Hub (parent) references
Parent,Nosepiece,Ti2-E__0
Parent,ZDrive,Ti2-E__0
Parent,FilterTurret1,Ti2-E__0
Parent,Turret1Shutter,Ti2-E__0
Parent,LightPath,Ti2-E__0
Parent,PFS,Ti2-E__0
Parent,PFSOffset,Ti2-E__0
Parent,IntermediateMagnification,Ti2-E__0
Parent,FW,Optospin Controller

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,ZDrive,1
FocusDirection,PFSOffset,1

# Roles
Property,Core,Camera,PVCamera
Property,Core,Shutter,Celesta
Property,Core,Focus,ZDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# Nosepiece
Label,Nosepiece,5,6-Plan Fluor 100x Oil
Label,Nosepiece,4,5-Plan Apo Lmbd 60x Oil
Label,Nosepiece,3,4-Plan Apo Lmbd 40x Ph2
Label,Nosepiece,2,3-Plan Apo Lmbd 40x
Label,Nosepiece,1,2-Plan Apo Lmbd 20x Ph2
Label,Nosepiece,0,1-Plan Apo Lmbd 20x
# FilterTurret1
Label,FilterTurret1,5,6-Empty
Label,FilterTurret1,4,5-Cy7
Label,FilterTurret1,3,4-DUAL
Label,FilterTurret1,2,3-PENTA
Label,FilterTurret1,1,2-DAPI
Label,FilterTurret1,0,1-Empty
# LightPath
Label,LightPath,3,4-L100
Label,LightPath,2,3-AUX
Label,LightPath,1,2-R100
Label,LightPath,0,1-EYE
# Camera
Label,Camera,255,255
Label,Camera,254,254
Label,Camera,253,253
Label,Camera,252,252
Label,Camera,251,251
Label,Camera,250,250
Label,Camera,249,249
Label,Camera,248,248
Label,Camera,247,247
Label,Camera,246,246
Label,Camera,245,245
Label,Camera,244,244
Label,Camera,243,243
Label,Camera,242,242
Label,Camera,241,241
Label,Camera,240,240
Label,Camera,239,239
Label,Camera,238,238
Label,Camera,237,237
Label,Camera,236,236
Label,Camera,235,235
Label,Camera,234,234
Label,Camera,233,233
Label,Camera,232,232
Label,Camera,231,231
Label,Camera,230,230
Label,Camera,229,229
Label,Camera,228,228
Label,Camera,227,227
Label,Camera,226,226
Label,Camera,225,225
Label,Camera,224,224
Label,Camera,223,223
Label,Camera,222,222
Label,Camera,221,221
Label,Camera,220,220
Label,Camera,219,219
Label,Camera,218,218
Label,Camera,217,217
Label,Camera,216,216
Label,Camera,215,215
Label,Camera,214,214
Label,Camera,213,213
Label,Camera,212,212
Label,Camera,211,211
Label,Camera,210,210
Label,Camera,209,209
Label,Camera,208,208
Label,Camera,207,207
Label,Camera,206,206
Label,Camera,205,205
Label,Camera,204,204
Label,Camera,203,203
Label,Camera,202,202
Label,Camera,201,201
Label,Camera,200,200
Label,Camera,199,199
Label,Camera,198,198
Label,Camera,197,197
Label,Camera,196,196
Label,Camera,195,195
Label,Camera,194,194
Label,Camera,193,193
Label,Camera,192,192
Label,Camera,191,191
Label,Camera,190,190
Label,Camera,189,189
Label,Camera,188,188
Label,Camera,187,187
Label,Camera,186,186
Label,Camera,185,185
Label,Camera,184,184
Label,Camera,183,183
Label,Camera,182,182
Label,Camera,181,181
Label,Camera,180,180
Label,Camera,179,179
Label,Camera,178,178
Label,Camera,177,177
Label,Camera,176,176
Label,Camera,175,175
Label,Camera,174,174
Label,Camera,173,173
Label,Camera,172,172
Label,Camera,171,171
Label,Camera,170,170
Label,Camera,169,169
Label,Camera,168,168
Label,Camera,167,167
Label,Camera,166,166
Label,Camera,165,165
Label,Camera,164,164
Label,Camera,163,163
Label,Camera,162,162
Label,Camera,161,161
Label,Camera,160,160
Label,Camera,159,159
Label,Camera,158,158
Label,Camera,157,157
Label,Camera,156,156
Label,Camera,155,155
Label,Camera,154,154
Label,Camera,153,153
Label,Camera,152,152
Label,Camera,151,151
Label,Camera,150,150
Label,Camera,149,149
Label,Camera,148,148
Label,Camera,147,147
Label,Camera,146,146
Label,Camera,145,145
Label,Camera,144,144
Label,Camera,143,143
Label,Camera,142,142
Label,Camera,141,141
Label,Camera,140,140
Label,Camera,139,139
Label,Camera,138,138
Label,Camera,137,137
Label,Camera,136,136
Label,Camera,135,135
Label,Camera,134,134
Label,Camera,133,133
Label,Camera,132,132
Label,Camera,131,131
Label,Camera,130,130
Label,Camera,129,129
Label,Camera,128,128
Label,Camera,127,127
Label,Camera,126,126
Label,Camera,125,125
Label,Camera,124,124
Label,Camera,123,123
Label,Camera,122,122
Label,Camera,121,121
Label,Camera,120,120
Label,Camera,119,119
Label,Camera,118,118
Label,Camera,117,117
Label,Camera,116,116
Label,Camera,115,115
Label,Camera,114,114
Label,Camera,113,113
Label,Camera,112,112
Label,Camera,111,111
Label,Camera,110,110
Label,Camera,109,109
Label,Camera,108,108
Label,Camera,107,107
Label,Camera,106,106
Label,Camera,105,105
Label,Camera,104,104
Label,Camera,103,103
Label,Camera,102,102
Label,Camera,101,101
Label,Camera,100,100
Label,Camera,99,99
Label,Camera,98,98
Label,Camera,97,97
Label,Camera,96,96
Label,Camera,95,95
Label,Camera,94,94
Label,Camera,93,93
Label,Camera,92,92
Label,Camera,91,91
Label,Camera,90,90
Label,Camera,89,89
Label,Camera,88,88
Label,Camera,87,87
Label,Camera,86,86
Label,Camera,85,85
Label,Camera,84,84
Label,Camera,83,83
Label,Camera,82,82
Label,Camera,81,81
Label,Camera,80,80
Label,Camera,79,79
Label,Camera,78,78
Label,Camera,77,77
Label,Camera,76,76
Label,Camera,75,75
Label,Camera,74,74
Label,Camera,73,73
Label,Camera,72,72
Label,Camera,71,71
Label,Camera,70,70
Label,Camera,69,69
Label,Camera,68,68
Label,Camera,67,67
Label,Camera,66,66
Label,Camera,65,65
Label,Camera,64,64
Label,Camera,63,63
Label,Camera,62,62
Label,Camera,61,61
Label,Camera,60,60
Label,Camera,59,59
Label,Camera,58,58
Label,Camera,57,57
Label,Camera,56,56
Label,Camera,55,55
Label,Camera,54,54
Label,Camera,53,53
Label,Camera,52,52
Label,Camera,51,51
Label,Camera,50,50
Label,Camera,49,49
Label,Camera,48,48
Label,Camera,47,47
Label,Camera,46,46
Label,Camera,45,45
Label,Camera,44,44
Label,Camera,43,43
Label,Camera,42,42
Label,Camera,41,41
Label,Camera,40,40
Label,Camera,39,39
Label,Camera,38,38
Label,Camera,37,37
Label,Camera,36,36
Label,Camera,35,35
Label,Camera,34,34
Label,Camera,33,33
Label,Camera,32,32
Label,Camera,31,31
Label,Camera,30,30
Label,Camera,29,29
Label,Camera,28,28
Label,Camera,27,27
Label,Camera,26,26
Label,Camera,25,25
Label,Camera,24,24
Label,Camera,23,23
Label,Camera,22,22
Label,Camera,21,21
Label,Camera,20,20
Label,Camera,19,19
Label,Camera,18,18
Label,Camera,17,17
Label,Camera,16,16
Label,Camera,15,15
Label,Camera,14,14
Label,Camera,13,13
Label,Camera,12,12
Label,Camera,11,11
Label,Camera,10,10
Label,Camera,9,9
Label,Camera,8,8
Label,Camera,7,7
Label,Camera,6,6
Label,Camera,5,5
Label,Camera,4,4
Label,Camera,3,3
Label,Camera,2,2
Label,Camera,1,1
Label,Camera,0,0
# FW
Label,FW,5,6-FITC
Label,FW,4,5-TRITC
Label,FW,3,4-Cy5
Label,FW,2,3-EMPTY
Label,FW,1,2-CFP
Label,FW,0,1-YFP

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup
ConfigGroup,System,Startup,Turret1Shutter,State,1


# Group: Science_channels
# Preset: YFP
ConfigGroup,Science_channels,YFP,FilterTurret1,Label,4-DUAL
ConfigGroup,Science_channels,YFP,FW,Label,1-YFP
ConfigGroup,Science_channels,YFP,PFS,DichroicMirrorInserted,Yes
ConfigGroup,Science_channels,YFP,PVCamera,Exposure,50.0000
ConfigGroup,Science_channels,YFP,Celesta,BLUE,0
ConfigGroup,Science_channels,YFP,Celesta,BLUE_Intensity,0
ConfigGroup,Science_channels,YFP,Celesta,CYAN,1
ConfigGroup,Science_channels,YFP,Celesta,CYAN_Intensity,1000
ConfigGroup,Science_channels,YFP,Celesta,GREEN,0
ConfigGroup,Science_channels,YFP,Celesta,GREEN_Intensity,0
ConfigGroup,Science_channels,YFP,Celesta,NIR,0
ConfigGroup,Science_channels,YFP,Celesta,NIR_Intensity,0
ConfigGroup,Science_channels,YFP,Celesta,RED,0
ConfigGroup,Science_channels,YFP,Celesta,RED_Intensity,0
ConfigGroup,Science_channels,YFP,Celesta,TEAL,0
ConfigGroup,Science_channels,YFP,Celesta,TEAL_Intensity,0
ConfigGroup,Science_channels,YFP,Celesta,VIOLET,0
ConfigGroup,Science_channels,YFP,Celesta,VIOLET_Intensity,0
ConfigGroup,Science_channels,YFP,TransShutter,Volts,0.0000

# Preset: CFP
ConfigGroup,Science_channels,CFP,FilterTurret1,Label,4-DUAL
ConfigGroup,Science_channels,CFP,FW,Label,2-CFP
ConfigGroup,Science_channels,CFP,PFS,DichroicMirrorInserted,Yes
ConfigGroup,Science_channels,CFP,PVCamera,Exposure,50.0000
ConfigGroup,Science_channels,CFP,Celesta,BLUE,0
ConfigGroup,Science_channels,CFP,Celesta,BLUE_Intensity,0
ConfigGroup,Science_channels,CFP,Celesta,CYAN,1
ConfigGroup,Science_channels,CFP,Celesta,CYAN_Intensity,1000
ConfigGroup,Science_channels,CFP,Celesta,GREEN,0
ConfigGroup,Science_channels,CFP,Celesta,GREEN_Intensity,0
ConfigGroup,Science_channels,CFP,Celesta,NIR,0
ConfigGroup,Science_channels,CFP,Celesta,NIR_Intensity,0
ConfigGroup,Science_channels,CFP,Celesta,RED,0
ConfigGroup,Science_channels,CFP,Celesta,RED_Intensity,0
ConfigGroup,Science_channels,CFP,Celesta,TEAL,0
ConfigGroup,Science_channels,CFP,Celesta,TEAL_Intensity,0
ConfigGroup,Science_channels,CFP,Celesta,VIOLET,0
ConfigGroup,Science_channels,CFP,Celesta,VIOLET_Intensity,0
ConfigGroup,Science_channels,CFP,TransShutter,Volts,0.0000

# Preset: BFP
ConfigGroup,Science_channels,BFP,FilterTurret1,Label,3-PENTA
ConfigGroup,Science_channels,BFP,FW,Label,3-EMPTY
ConfigGroup,Science_channels,BFP,PFS,DichroicMirrorInserted,Yes
ConfigGroup,Science_channels,BFP,PVCamera,Exposure,50.0000
ConfigGroup,Science_channels,BFP,Celesta,BLUE,0
ConfigGroup,Science_channels,BFP,Celesta,BLUE_Intensity,0
ConfigGroup,Science_channels,BFP,Celesta,CYAN,1
ConfigGroup,Science_channels,BFP,Celesta,CYAN_Intensity,1000
ConfigGroup,Science_channels,BFP,Celesta,GREEN,0
ConfigGroup,Science_channels,BFP,Celesta,GREEN_Intensity,0
ConfigGroup,Science_channels,BFP,Celesta,NIR,0
ConfigGroup,Science_channels,BFP,Celesta,NIR_Intensity,0
ConfigGroup,Science_channels,BFP,Celesta,RED,0
ConfigGroup,Science_channels,BFP,Celesta,RED_Intensity,0
ConfigGroup,Science_channels,BFP,Celesta,TEAL,0
ConfigGroup,Science_channels,BFP,Celesta,TEAL_Intensity,0
ConfigGroup,Science_channels,BFP,Celesta,VIOLET,0
ConfigGroup,Science_channels,BFP,Celesta,VIOLET_Intensity,0
ConfigGroup,Science_channels,BFP,TransShutter,Volts,0.0000

# Preset: RFP
ConfigGroup,Science_channels,RFP,FilterTurret1,Label,3-PENTA
ConfigGroup,Science_channels,RFP,FW,Label,5-TRITC
ConfigGroup,Science_channels,RFP,PFS,DichroicMirrorInserted,Yes
ConfigGroup,Science_channels,RFP,PVCamera,Exposure,100.0000
ConfigGroup,Science_channels,RFP,Celesta,BLUE,0
ConfigGroup,Science_channels,RFP,Celesta,BLUE_Intensity,0
ConfigGroup,Science_channels,RFP,Celesta,CYAN,0
ConfigGroup,Science_channels,RFP,Celesta,CYAN_Intensity,0
ConfigGroup,Science_channels,RFP,Celesta,GREEN,1
ConfigGroup,Science_channels,RFP,Celesta,GREEN_Intensity,1
ConfigGroup,Science_channels,RFP,Celesta,NIR,0
ConfigGroup,Science_channels,RFP,Celesta,NIR_Intensity,0
ConfigGroup,Science_channels,RFP,Celesta,RED,0
ConfigGroup,Science_channels,RFP,Celesta,RED_Intensity,0
ConfigGroup,Science_channels,RFP,Celesta,TEAL,0
ConfigGroup,Science_channels,RFP,Celesta,TEAL_Intensity,0
ConfigGroup,Science_channels,RFP,Celesta,VIOLET,0
ConfigGroup,Science_channels,RFP,Celesta,VIOLET_Intensity,
ConfigGroup,Science_channels,RFP,TransShutter,Volts,0.0000

# Preset: GFP
ConfigGroup,Science_channels,GFP,FilterTurret1,Label,3-PENTA
ConfigGroup,Science_channels,GFP,FW,Label,6-FITC
ConfigGroup,Science_channels,GFP,PFS,DichroicMirrorInserted,Yes
ConfigGroup,Science_channels,GFP,PVCamera,Exposure,50.0000
ConfigGroup,Science_channels,GFP,Celesta,BLUE,0
ConfigGroup,Science_channels,GFP,Celesta,BLUE_Intensity,0
ConfigGroup,Science_channels,GFP,Celesta,CYAN,1
ConfigGroup,Science_channels,GFP,Celesta,CYAN_Intensity,1000
ConfigGroup,Science_channels,GFP,Celesta,GREEN,0
ConfigGroup,Science_channels,GFP,Celesta,GREEN_Intensity,0
ConfigGroup,Science_channels,GFP,Celesta,NIR,0
ConfigGroup,Science_channels,GFP,Celesta,NIR_Intensity,0
ConfigGroup,Science_channels,GFP,Celesta,RED,0
ConfigGroup,Science_channels,GFP,Celesta,RED_Intensity,0
ConfigGroup,Science_channels,GFP,Celesta,TEAL,0
ConfigGroup,Science_channels,GFP,Celesta,TEAL_Intensity,0
ConfigGroup,Science_channels,GFP,Celesta,VIOLET,0
ConfigGroup,Science_channels,GFP,Celesta,VIOLET_Intensity,0
ConfigGroup,Science_channels,GFP,TransShutter,Volts,0.0000

# Preset: BF
ConfigGroup,Science_channels,BF,FilterTurret1,Label,3-PENTA
ConfigGroup,Science_channels,BF,FW,Label,3-EMPTY
ConfigGroup,Science_channels,BF,PFS,DichroicMirrorInserted,Yes
ConfigGroup,Science_channels,BF,PVCamera,Exposure,50.0000
ConfigGroup,Science_channels,BF,Celesta,BLUE,0
ConfigGroup,Science_channels,BF,Celesta,BLUE_Intensity,0
ConfigGroup,Science_channels,BF,Celesta,CYAN,0
ConfigGroup,Science_channels,BF,Celesta,CYAN_Intensity,0
ConfigGroup,Science_channels,BF,Celesta,GREEN,0
ConfigGroup,Science_channels,BF,Celesta,GREEN_Intensity,0
ConfigGroup,Science_channels,BF,Celesta,NIR,0
ConfigGroup,Science_channels,BF,Celesta,NIR_Intensity,0
ConfigGroup,Science_channels,BF,Celesta,RED,0
ConfigGroup,Science_channels,BF,Celesta,RED_Intensity,0
ConfigGroup,Science_channels,BF,Celesta,TEAL,0
ConfigGroup,Science_channels,BF,Celesta,TEAL_Intensity,0
ConfigGroup,Science_channels,BF,Celesta,VIOLET,0
ConfigGroup,Science_channels,BF,Celesta,VIOLET_Intensity,
ConfigGroup,Science_channels,BF,TransShutter,Volts,5.0000

# Preset: DAPI
ConfigGroup,Science_channels,DAPI,FilterTurret1,Label,2-DAPI
ConfigGroup,Science_channels,DAPI,FW,Label,3-EMPTY
ConfigGroup,Science_channels,DAPI,PFS,DichroicMirrorInserted,Yes
ConfigGroup,Science_channels,DAPI,PVCamera,Exposure,50.0000
ConfigGroup,Science_channels,DAPI,Celesta,BLUE,0
ConfigGroup,Science_channels,DAPI,Celesta,BLUE_Intensity,0
ConfigGroup,Science_channels,DAPI,Celesta,CYAN,1
ConfigGroup,Science_channels,DAPI,Celesta,CYAN_Intensity,1000
ConfigGroup,Science_channels,DAPI,Celesta,GREEN,0
ConfigGroup,Science_channels,DAPI,Celesta,GREEN_Intensity,0
ConfigGroup,Science_channels,DAPI,Celesta,NIR,0
ConfigGroup,Science_channels,DAPI,Celesta,NIR_Intensity,0
ConfigGroup,Science_channels,DAPI,Celesta,RED,0
ConfigGroup,Science_channels,DAPI,Celesta,RED_Intensity,0
ConfigGroup,Science_channels,DAPI,Celesta,TEAL,0
ConfigGroup,Science_channels,DAPI,Celesta,TEAL_Intensity,0
ConfigGroup,Science_channels,DAPI,Celesta,VIOLET,0
ConfigGroup,Science_channels,DAPI,Celesta,VIOLET_Intensity,0
ConfigGroup,Science_channels,DAPI,TransShutter,Volts,0.0000


# Group: FISH_channels
# Preset: Cy7
ConfigGroup,FISH_channels,Cy7,FilterTurret1,Label,5-Cy7
ConfigGroup,FISH_channels,Cy7,FW,Label,3-EMPTY
ConfigGroup,FISH_channels,Cy7,PFS,DichroicMirrorInserted,Yes
ConfigGroup,FISH_channels,Cy7,PVCamera,Exposure,1000.0000
ConfigGroup,FISH_channels,Cy7,Celesta,BLUE,0
ConfigGroup,FISH_channels,Cy7,Celesta,BLUE_Intensity,0
ConfigGroup,FISH_channels,Cy7,Celesta,CYAN,0
ConfigGroup,FISH_channels,Cy7,Celesta,CYAN_Intensity,0
ConfigGroup,FISH_channels,Cy7,Celesta,GREEN,0
ConfigGroup,FISH_channels,Cy7,Celesta,GREEN_Intensity,0
ConfigGroup,FISH_channels,Cy7,Celesta,NIR,1
ConfigGroup,FISH_channels,Cy7,Celesta,NIR_Intensity,1000
ConfigGroup,FISH_channels,Cy7,Celesta,RED,0
ConfigGroup,FISH_channels,Cy7,Celesta,RED_Intensity,0
ConfigGroup,FISH_channels,Cy7,Celesta,TEAL,0
ConfigGroup,FISH_channels,Cy7,Celesta,TEAL_Intensity,0
ConfigGroup,FISH_channels,Cy7,Celesta,VIOLET,0
ConfigGroup,FISH_channels,Cy7,Celesta,VIOLET_Intensity,0
ConfigGroup,FISH_channels,Cy7,TransShutter,Volts,0.0000

# Preset: RFP
ConfigGroup,FISH_channels,RFP,FilterTurret1,Label,3-PENTA
ConfigGroup,FISH_channels,RFP,FW,Label,5-TRITC
ConfigGroup,FISH_channels,RFP,PFS,DichroicMirrorInserted,Yes
ConfigGroup,FISH_channels,RFP,PVCamera,Exposure,1000.0000
ConfigGroup,FISH_channels,RFP,Celesta,BLUE,0
ConfigGroup,FISH_channels,RFP,Celesta,BLUE_Intensity,0
ConfigGroup,FISH_channels,RFP,Celesta,CYAN,0
ConfigGroup,FISH_channels,RFP,Celesta,CYAN_Intensity,0
ConfigGroup,FISH_channels,RFP,Celesta,GREEN,1
ConfigGroup,FISH_channels,RFP,Celesta,GREEN_Intensity,1000
ConfigGroup,FISH_channels,RFP,Celesta,NIR,0
ConfigGroup,FISH_channels,RFP,Celesta,NIR_Intensity,0
ConfigGroup,FISH_channels,RFP,Celesta,RED,0
ConfigGroup,FISH_channels,RFP,Celesta,RED_Intensity,0
ConfigGroup,FISH_channels,RFP,Celesta,TEAL,0
ConfigGroup,FISH_channels,RFP,Celesta,TEAL_Intensity,0
ConfigGroup,FISH_channels,RFP,Celesta,VIOLET,0
ConfigGroup,FISH_channels,RFP,Celesta,VIOLET_Intensity,0
ConfigGroup,FISH_channels,RFP,TransShutter,Volts,0.0000

# Preset: GFP
ConfigGroup,FISH_channels,GFP,FilterTurret1,Label,3-PENTA
ConfigGroup,FISH_channels,GFP,FW,Label,6-FITC
ConfigGroup,FISH_channels,GFP,PFS,DichroicMirrorInserted,Yes
ConfigGroup,FISH_channels,GFP,PVCamera,Exposure,500.0000
ConfigGroup,FISH_channels,GFP,Celesta,BLUE,0
ConfigGroup,FISH_channels,GFP,Celesta,BLUE_Intensity,0
ConfigGroup,FISH_channels,GFP,Celesta,CYAN,1
ConfigGroup,FISH_channels,GFP,Celesta,CYAN_Intensity,1000
ConfigGroup,FISH_channels,GFP,Celesta,GREEN,0
ConfigGroup,FISH_channels,GFP,Celesta,GREEN_Intensity,0
ConfigGroup,FISH_channels,GFP,Celesta,NIR,0
ConfigGroup,FISH_channels,GFP,Celesta,NIR_Intensity,0
ConfigGroup,FISH_channels,GFP,Celesta,RED,0
ConfigGroup,FISH_channels,GFP,Celesta,RED_Intensity,0
ConfigGroup,FISH_channels,GFP,Celesta,TEAL,0
ConfigGroup,FISH_channels,GFP,Celesta,TEAL_Intensity,0
ConfigGroup,FISH_channels,GFP,Celesta,VIOLET,0
ConfigGroup,FISH_channels,GFP,Celesta,VIOLET_Intensity,0
ConfigGroup,FISH_channels,GFP,TransShutter,Volts,0.0000

# Preset: BF
ConfigGroup,FISH_channels,BF,FilterTurret1,Label,3-PENTA
ConfigGroup,FISH_channels,BF,FW,Label,3-EMPTY
ConfigGroup,FISH_channels,BF,PFS,DichroicMirrorInserted,Yes
ConfigGroup,FISH_channels,BF,PVCamera,Exposure,50.0000
ConfigGroup,FISH_channels,BF,Celesta,BLUE,0
ConfigGroup,FISH_channels,BF,Celesta,BLUE_Intensity,0
ConfigGroup,FISH_channels,BF,Celesta,CYAN,0
ConfigGroup,FISH_channels,BF,Celesta,CYAN_Intensity,0
ConfigGroup,FISH_channels,BF,Celesta,GREEN,0
ConfigGroup,FISH_channels,BF,Celesta,GREEN_Intensity,0
ConfigGroup,FISH_channels,BF,Celesta,NIR,0
ConfigGroup,FISH_channels,BF,Celesta,NIR_Intensity,0
ConfigGroup,FISH_channels,BF,Celesta,RED,0
ConfigGroup,FISH_channels,BF,Celesta,RED_Intensity,0
ConfigGroup,FISH_channels,BF,Celesta,TEAL,0
ConfigGroup,FISH_channels,BF,Celesta,TEAL_Intensity,0
ConfigGroup,FISH_channels,BF,Celesta,VIOLET,0
ConfigGroup,FISH_channels,BF,Celesta,VIOLET_Intensity,0
ConfigGroup,FISH_channels,BF,TransShutter,Volts,5.0000

# Preset: Cy5
ConfigGroup,FISH_channels,Cy5,FilterTurret1,Label,3-PENTA
ConfigGroup,FISH_channels,Cy5,FW,Label,4-Cy5
ConfigGroup,FISH_channels,Cy5,PFS,DichroicMirrorInserted,Yes
ConfigGroup,FISH_channels,Cy5,PVCamera,Exposure,500.0000
ConfigGroup,FISH_channels,Cy5,Celesta,BLUE,0
ConfigGroup,FISH_channels,Cy5,Celesta,BLUE_Intensity,0
ConfigGroup,FISH_channels,Cy5,Celesta,CYAN,0
ConfigGroup,FISH_channels,Cy5,Celesta,CYAN_Intensity,0
ConfigGroup,FISH_channels,Cy5,Celesta,GREEN,0
ConfigGroup,FISH_channels,Cy5,Celesta,GREEN_Intensity,0
ConfigGroup,FISH_channels,Cy5,Celesta,NIR,0
ConfigGroup,FISH_channels,Cy5,Celesta,NIR_Intensity,0
ConfigGroup,FISH_channels,Cy5,Celesta,RED,1
ConfigGroup,FISH_channels,Cy5,Celesta,RED_Intensity,1000
ConfigGroup,FISH_channels,Cy5,Celesta,TEAL,0
ConfigGroup,FISH_channels,Cy5,Celesta,TEAL_Intensity,0
ConfigGroup,FISH_channels,Cy5,Celesta,VIOLET,0
ConfigGroup,FISH_channels,Cy5,Celesta,VIOLET_Intensity,0
ConfigGroup,FISH_channels,Cy5,TransShutter,Volts,0.0000



# PixelSize settings

